PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = cm
  Window size (pixels) = [1680, 1050]
  expName = VR_setting
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine end
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine both_stim
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    CodeComponent both_code
      Code Type = Auto->JS
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      End Routine:
        key = both_kb.keys

        if key == 'space':
            level = 0
            Loop_setting.finished=True
        elif key == 'up':
            level = .2
        elif key == 'down':
            level = -.2

        rx_pos = rx_pos + level
        lf_pos = lf_pos + (level*-1)


        thisExp.addData("position.left", lf_pos)
        thisExp.addData("position.right", rx_pos)
    ImageComponent both_r_img
      image = images/F.png
      pos [set every repeat] = (rx_pos, 0)
      saveStartStop = False
      size = (size_img, size_img)
      startVal [time (s)] = 0.0
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    ImageComponent both_l_img
      image = images/F.png
      pos [set every repeat] = (lf_pos, 0)
      saveStartStop = False
      size = (3, 3)
      startVal [time (s)] = 0.0
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    KeyboardComponent both_kb
      allowedKeys = 'up','down','space'
      correctAns = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine log_2
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Experiment:
        thisExp.addData("position.left", lf_pos)
        thisExp.addData("position.right", rx_pos)
  Routine SETTING
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    CodeComponent code_setting
      Code Type = Auto->JS
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      Begin Experiment:
        start_pos = 3
        size_img = 3

        rx_pos = start_pos
        lf_pos = start_pos * (-1)
        rx_pos2 = []
        lf_pos2 = []

        nb_loop = 1000
  Routine BLACK_SCREEN
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    KeyboardComponent blackscreen_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent blackscreen_txt
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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  Routine STIM_R
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    ImageComponent stim_r_img
      image = images/F.png
      pos = (rx_pos, 0)
      saveStartStop = False
      size = (size_img, size_img)
      startVal [time (s)] = 0.0
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    KeyboardComponent stim_r_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine STIM_L
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    ImageComponent stim_l_img
      image = images/F.png
      pos = (lf_pos, 0)
      saveStartStop = False
      size = (size_img, size_img)
      startVal [time (s)] = 0.0
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    KeyboardComponent stim_l_
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ISTR
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    ImageComponent istr_r
      image = images/FS.png
      pos [set every repeat] = (rx_pos, 0)
      saveStartStop = False
      size = (size_img, size_img)
      startVal [time (s)] = 0.0
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    ImageComponent istr_l
      image = images/FS.png
      pos [set every repeat] = (lf_pos, 0)
      saveStartStop = False
      size = (size_img, size_img)
      startVal [time (s)] = 0.0
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    KeyboardComponent istr_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TRIALS
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    ImageComponent trial_l
      image [set every repeat] = $stim_left
      pos [set every repeat] = (lf_pos, 0)
      size = (size_img, size_img)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent trial_r
      image [set every repeat] = $stim_right
      pos [set every repeat] = (rx_pos, 0)
      size = (size_img, size_img)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent trial_kb
      allowedKeys = 'j','k','l'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = all keys
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    TextComponent trial_txt
      letterHeight = 0.05
      startVal [time (s)] = 30
      stopVal [duration (s)] = 2.0
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      text:
        Any text

        including line breaks
Flow
  Routine SETTING
  Routine BLACK_SCREEN
  Routine STIM_R
  Routine BLACK_SCREEN
  Routine STIM_L
  Routine BLACK_SCREEN
  LoopInitiator Loop_setting loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = sequential
    nReps = nb_loop
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    conditions:
      [{'stim_left': 'images/F.png', 'stim_right': 'images/N.png'},
      {'stim_left': 'images/N.png', 'stim_right': 'images/F.png'}]
    Routine both_stim
  LoopTerminator Loop_setting
  Routine BLACK_SCREEN
  Routine ISTR
  LoopInitiator Loop_trial loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_left': 'images/F.png', 'stim_right': 'images/N.png'},
      {'stim_left': 'images/N.png', 'stim_right': 'images/F.png'}]
    Routine TRIALS
  LoopTerminator Loop_trial
  Routine BLACK_SCREEN
